<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>9600</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM10</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%B</Pattern>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>2*(it-121)/255</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>0.05*(Math.Max(it-10,0))/(it-10)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ExtentX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>-0</ExtentX>
        <ExtentY>2</ExtentY>
        <LocationX>-0.9490196</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="11" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>